PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 768]
  expName = hello_pyramid
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent left
      fillColor = white
      pos = (-0.5, 0)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 1
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    PolygonComponent right
      fillColor = white
      pos = (0.5, 0)
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 1
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    MouseComponent mouse
      clickable = left, right
      forceEndRoutineOnPress = valid click
      saveMouseState = every frame
      startVal [time (s)] = 1
      timeRelativeTo = experiment
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    TextComponent prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prompt_text
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    TextComponent cue
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $cue_text
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  Routine pause
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you!
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = hello_pyramid_conditions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('prompt', 'Click left.'), ('cue', '<---'), ('correct_target', 'left')]),
      OrderedDict([('prompt', 'Click left.'), ('cue', '--->'), ('correct_target', 'left')]),
      OrderedDict([('prompt', 'Click right.'), ('cue', '<---'), ('correct_target', 'right')]),
      OrderedDict([('prompt', 'Click right.'), ('cue', '--->'), ('correct_target', 'right')])]
    Routine trial
    Routine pause
  LoopTerminator trials
