PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = hello_pyramid
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $f'Hello, Pyramid!\n{str(trials.nRemaining)}'
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator trials
